PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1070, 600]
  expName = 2.0 signal detection
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      desc = welcome to the experiment. Press the up arrow for no tilt and down arrow for tilt. 
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the experiment. Press up arrow for no tilt and down arrow for tilt. s
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  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-5, 5))
            corrAns = 'down'
      End Routine:
        trials.addData('tilt', tilt);

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
                tilt = int(randint(-5, 5))
                corrAns = 'down'
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 01.0
      storeCorrect = True
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  Routine Thank_you_
    RoutineSettingsComponent Thank_you_
      desc = Thank you for your time 
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your time 
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thank_you_
