PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 600]
  expName = Delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text [set every repeat]:
        $"GBP " + str(reward_today) + " today or GBP " + str(future_reward) + " after " + str(delay) + " days"
    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Welcome to the experiment
        the amounts and delays will vary across trials, and the goal is to choose whichever option you personally prefer on each trial
  Routine thank_you
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 50, 'future_reward': 90, 'delay': 117},
      {'reward_today': 38, 'future_reward': 60, 'delay': 32},
      {'reward_today': 40, 'future_reward': 88, 'delay': 137},
      {'reward_today': 11, 'future_reward': 41, 'delay': 45},
      {'reward_today': 47, 'future_reward': 85, 'delay': 60},
      {'reward_today': 78, 'future_reward': 100, 'delay': 106},
      {'reward_today': 43, 'future_reward': 60, 'delay': 20},
      {'reward_today': 51, 'future_reward': 77, 'delay': 18},
      {'reward_today': 78, 'future_reward': 99, 'delay': 116},
      {'reward_today': 16, 'future_reward': 45, 'delay': 85},
      {'reward_today': 34, 'future_reward': 61, 'delay': 180},
      {'reward_today': 28, 'future_reward': 75, 'delay': 41},
      {'reward_today': 44, 'future_reward': 65, 'delay': 38},
      {'reward_today': 60, 'future_reward': 101, 'delay': 120},
      {'reward_today': 53, 'future_reward': 86, 'delay': 71},
      {'reward_today': 19, 'future_reward': 34, 'delay': 21},
      {'reward_today': 65, 'future_reward': 93, 'delay': 97},
      {'reward_today': 14, 'future_reward': 48, 'delay': 48},
      {'reward_today': 57, 'future_reward': 82, 'delay': 118},
      {'reward_today': 39, 'future_reward': 90, 'delay': 170}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
    Routine trial
  LoopTerminator trials
  Routine thank_you
