PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 600]
  expName = Lexical Decision Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent Condition_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Characters
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to the Lexical Decision Task

        You are about to see a series of characters

        If it makes a word press RIGHT arrow key and
        if it does not make a word press LEFT arrow key
  Routine Thank_you_
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your time and effort
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LDT_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Characters': 'Cat', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'bar', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'tea', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'cap', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'pat', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'plant', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'team', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'cup', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'night', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'day', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'apple', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'river', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'star', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'book', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'window', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'chair', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'cloud', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'music', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'dog', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'pencil', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'phone', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'shoe', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'mouse', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'house', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'lake', 'Corr_ans': 1, 'answer': 'right'},
      {'Characters': 'tiger', 'Corr_ans': 1, 'answer': 'right'}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
    Routine trial
  LoopTerminator trials
  Routine Thank_you_
