PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1070,600]
  expName = Word_priming_5.0
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        click to submit
    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_oo_', 'Refrence': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'Refrence': 'cushion', 'old_new': 'old'},
      {'test_word': '_ho_n_', 'Refrence': 'phone', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Refrence': 'marble', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Refrence': 'board', 'old_new': 'old'},
      {'test_word': 'l_pt_p', 'Refrence': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Refrence': 'chart', 'old_new': 'old'},
      {'test_word': 'T_hi_t', 'Refrence': 'Tshirt', 'old_new': 'old'},
      {'test_word': '_ou_s_', 'Refrence': 'mouse', 'old_new': 'old'},
      {'test_word': 'p_s_ry', 'Refrence': 'Pastry', 'old_new': 'old'},
      {'test_word': 'c_a_', 'Refrence': 'Case', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'Refrence': 'Cruise', 'old_new': 'old'},
      {'test_word': '_ol_ce', 'Refrence': 'Police', 'old_new': 'old'},
      {'test_word': 'K_y_', 'Refrence': 'Keys', 'old_new': 'old'},
      {'test_word': '_o_t_r', 'Refrence': 'Poster', 'old_new': 'old'},
      {'test_word': '_ab_e', 'Refrence': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Refrence': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Refrence': 'vase', 'old_new': 'new'},
      {'test_word': 'b_tt_e', 'Refrence': 'bottle', 'old_new': 'new'},
      {'test_word': '_am_ra', 'Refrence': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
